PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1600, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = Gestalt_exp1
  Units = pix
  Screen = 1
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Routines
  Routine numInstruc
    TextComponent instruct2
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Dit is deel 2 van het experiment. Hierbij zal je telkens 2 afbeeldingen naast mekaar te zien krijgen.
        De bedoeling is dat je een schatting maakt van welke afbeelding het meeste aantal dots heeft.
        Je hoeft de dots niet te tellen, het is gewoon een ruwe schatting die je maakt.

        Als je vindt dat de linkerafbeelding meer dots heeft, dan druk je op het linkerpijltje.
        Als je vindt dat de rechterafbeelding meer dots heeft, dan druk je op het rechterpijltje.

        Als je deze instructies hebt gelezen, druk op spatie. Deel 2 zal dan beginnen.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Feedback
    TextComponent feedback
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Het experiment is afgelopen.Je mag de proefleider laten weten dat je het experiment afgerond hebt.
        Bedankt om deel te nemen!
  Routine Instructions_1
    TextComponent Instructions
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        In dit experiment zal je een aantal afbeeldingen zeer kort aangeboden krijgen. Na elke afbeelding zal je een schaal van 1 tot 9 te zien krijgen waarop je moet aanduiden hoe aangenaam je deze afbeelding vond. 1 staat voor helemaal niet aangenaam en 9 zeer aangenaam.
        Ook al heb je de afbeelding maar heel kort gezien, probeer toch zo goed mogelijk je voorkeur aan te duiden. Probeer er ook niet te lang over na te denken, volg gewoon je intuïtie.
        Als je een vraag hebt over het experiment, roep de proefleider dan even erbij.

        Als je deze instructies hebt doorgelezen, mag je op spatie drukken en dan begint het experiment.
    KeyboardComponent response
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine TRIAL_EXP
    TextComponent fixationcross
      color = black
      text = +
      stopVal [duration (s)] = 0.5
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image
      stopVal [duration (s)] = 0.1
      startVal [time (s)] = 1
      image [set every repeat] = $images
      size = [600, 600]
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    RatingScaleComponent rating
      pos = 0, 0
      high = 9
      startVal [time (s)] = 1.2
      size = 1.0
      forceEndRoutine = True
      low = 1
      scaleDescription = Hoe aangenaam vond je deze afbeelding? 1 = helemaal niet aangenaam, 9 = heel aangenaam
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  Routine numerosity
    CodeComponent code
      Begin Routine:
        if random()>0.5:
            firstImg=imgA
            secondImg=imgB
            APos=[0, 0.0]
            BPos=[0, 0.0]
            Alocation='left'
        else:
            firstImg=imgB
            secondImg=imgA
            APos=[0, 0.0]
            BPos=[0, 0.0]
            Alocation='right'
    TextComponent text
      color = black
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 40
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    ImageComponent Left
      stopVal [duration (s)] = 0.500
      pos [set every repeat] = APos
      startVal [time (s)] = 1
      image [set every repeat] = $firstImg
      size = [600, 600]
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    ImageComponent Right
      stopVal [duration (s)] = 0.5
      pos [set every repeat] = BPos
      startVal [time (s)] = 1.5
      image [set every repeat] = $secondImg
      size = [600, 600]
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    KeyboardComponent numResp
      correctAns = $Alocation
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 2
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    CodeComponent code_2
      Begin Routine:
        print imgA, imgB
Flow
  Routine Instructions_1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condAppreciation.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'images': u'images/k01.bmp', 'condition': u'gestalt'},
      {'images': u'images/k02.bmp', 'condition': u'gestalt'},
      {'images': u'images/k03.bmp', 'condition': u'gestalt'},
      {'images': u'images/k04.bmp', 'condition': u'gestalt'},
      {'images': u'images/k05.bmp', 'condition': u'gestalt'},
      {'images': u'images/k06.bmp', 'condition': u'gestalt'},
      {'images': u'images/k07.bmp', 'condition': u'gestalt'},
      {'images': u'images/k08.bmp', 'condition': u'gestalt'},
      {'images': u'images/k09.bmp', 'condition': u'gestalt'},
      {'images': u'images/k10.bmp', 'condition': u'gestalt'},
      {'images': u'images/k11.bmp', 'condition': u'gestalt'},
      {'images': u'images/k12.bmp', 'condition': u'gestalt'},
      {'images': u'images/k13.bmp', 'condition': u'gestalt'},
      {'images': u'images/k14.bmp', 'condition': u'gestalt'},
      {'images': u'images/k15.bmp', 'condition': u'gestalt'},
      {'images': u'images/k16.bmp', 'condition': u'gestalt'},
      {'images': u'images/k17.bmp', 'condition': u'gestalt'},
      {'images': u'images/k18.bmp', 'condition': u'gestalt'},
      {'images': u'images/k19.bmp', 'condition': u'gestalt'},
      {'images': u'images/k20.bmp', 'condition': u'gestalt'},
      {'images': u'images/k21.bmp', 'condition': u'gestalt'},
      {'images': u'images/k22.bmp', 'condition': u'gestalt'},
      {'images': u'images/k23.bmp', 'condition': u'gestalt'},
      {'images': u'images/k24.bmp', 'condition': u'gestalt'},
      {'images': u'images/k25.bmp', 'condition': u'gestalt'},
      {'images': u'images/k26.bmp', 'condition': u'gestalt'},
      {'images': u'images/k27.bmp', 'condition': u'gestalt'}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
    Routine TRIAL_EXP
  LoopTerminator trials
  Routine numInstruc
  LoopInitiator numLoop loopType="TrialHandler"
    conditionsFile = condNumerosity.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'imgB': u'images/i01.bmp', 'imgA': u'images/k01.bmp', 'condition': u'Gestalt-scrambled'},
      {'imgB': u'images/i02.bmp', 'imgA': u'images/k02.bmp', 'condition': u'Gestalt-scrambled'},
      {'imgB': u'images/i03.bmp', 'imgA': u'images/k03.bmp', 'condition': u'Gestalt-scrambled'},
      {'imgB': u'images/i04.bmp', 'imgA': u'images/k04.bmp', 'condition': u'Gestalt-scrambled'},
      {'imgB': u'images/i05.bmp', 'imgA': u'images/k05.bmp', 'condition': u'Gestalt-scrambled'},
      {'imgB': u'images/i06.bmp', 'imgA': u'images/k06.bmp', 'condition': u'Gestalt-scrambled'},
      {'imgB': u'images/i07.bmp', 'imgA': u'images/k07.bmp', 'condition': u'Gestalt-scrambled'},
      {'imgB': u'images/i08.bmp', 'imgA': u'images/k08.bmp', 'condition': u'Gestalt-scrambled'},
      {'imgB': u'images/i09.bmp', 'imgA': u'images/k09.bmp', 'condition': u'Gestalt-scrambled'},
      {'imgB': u'images/i10.bmp', 'imgA': u'images/k10.bmp', 'condition': u'Gestalt-scrambled'},
      {'imgB': u'images/i11.bmp', 'imgA': u'images/k11.bmp', 'condition': u'Gestalt-scrambled'},
      {'imgB': u'images/i12.bmp', 'imgA': u'images/k12.bmp', 'condition': u'Gestalt-scrambled'},
      {'imgB': u'images/i13.bmp', 'imgA': u'images/k13.bmp', 'condition': u'Gestalt-scrambled'},
      {'imgB': u'images/i14.bmp', 'imgA': u'images/k14.bmp', 'condition': u'Gestalt-scrambled'},
      {'imgB': u'images/i15.bmp', 'imgA': u'images/k15.bmp', 'condition': u'Gestalt-scrambled'},
      {'imgB': u'images/i16.bmp', 'imgA': u'images/k16.bmp', 'condition': u'Gestalt-scrambled'}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
    Routine numerosity
  LoopTerminator numLoop
  Routine Feedback
